macro "Batch Intensity Analysis" {
    // Specify the directory path (update with your directory path)
    dirPath = "xxx";

    // Get the list of files in the directory
    fileList = getFileList(dirPath);

    // Loop through each file in the directory
    for (i = 0; i < lengthOf(fileList); i++) {
        // Build the complete file path
        filePath = dirPath + fileList[i];

        // Check if the file is an image and not a directory
        if (File.isDirectory(filePath)) {
            continue; // Skip directories
        }

        // Open the current image
        open(filePath);

        // Perform intensity analysis on the current image
        run("16-bit");
        setAutoThreshold("Default dark");
        // run("Threshold..."); // Commented out for manual adjustment
        setThreshold(20, 255);
        setOption("BlackBackground", false);
        run("Convert to Mask");
        run("Measure");

        // Close the current image
        close();
    }
}
